PsychoPy2experiment version="1.80.01"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [2560, 1440]
  Full-screen window = True
  Experiment info = {u'participant': u'', u'condition': u'A'}
  Save csv file = True
  expName = encoding
  Units = norm
  Screen = 1
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Routines
  Routine trial_2
    StaticComponent ISI_2
      stopVal [duration (s)] = .5
      startVal [time (s)] = 0
    ImageComponent image
      stopVal [duration (s)] = 2.5
      units = pix
      startVal [time (s)] = 0.5
      image [set during: trial_2.ISI_2] = $ImageFile
      size = [1200, 900]
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    TextComponent scale
      wrapWidth = 1600
      text = least -- 1 -- 2 -- 3 -- 4 -- most
      stopVal [duration (s)] = 3.5
      pos = [0, -.9]
      startVal [time (s)] = 0.5
      letterHeight = 0.08
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    KeyboardComponent response
      stopVal [duration (s)] = 3.5
      forceEndRoutine = False
      allowedKeys = '1','2','3','4'
      startVal [time (s)] = 0.5
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    TextComponent fixISI_1
      text = +
      stopVal [duration (s)] = .5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    TextComponent scaleLabel
      text [set every repeat] = $ConLabel
      stopVal [duration (s)] = 3.5
      pos = [0, -.8]
      startVal [time (s)] = .5
      letterHeight = 0.1
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    CodeComponent addOnset_trial
      Begin Routine:
        onsetTime = fmriClock.getTime() + .5
        trials.addData('onsetTimeTrial',onsetTime)
    TextComponent fixISI_after
      text = +
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 3
      letterHeight = 0.1
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  Routine cushionEnd
    TextComponent endFixation
      text = +
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent findEnd
      Each Frame:
        if fmriClock.getTime()>281.4:
            continueRoutine=False
  Routine preblock
    TextComponent blockInstrux
      text [set every repeat] = $ConLabel
      stopVal [duration (s)] = 2.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent ifBlockStart
      Each Frame:
        if trials.thisTrialN not in [0,4,8,12,16,20,24,28]:
            continueRoutine=False
      Begin Routine:
        onsetTime = fmriClock.getTime()
        trials.addData('onsetTimeCue',onsetTime)
  Routine waitForScanner
    TextComponent waitScreen
      text = Waiting for scanner to warm up...
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    KeyboardComponent waitTrigger
      forceEndRoutine = True
      allowedKeys = '5'
      startVal [time (s)] = 0.0
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    CodeComponent getScannerStart
      Begin Routine:
        fmriClock = core.Clock()
      End Routine:
        fmriClock.reset()
  Routine beginScan
    TextComponent prescanFixation
      text = +
      stopVal [duration (s)] = 6.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent addOnset_prescan
      Begin Routine:
        onsetTime = fmriClock.getTime()
        runs.addData('onsetTimeScan',onsetTime)
  Routine finished
    TextComponent text
      stopVal [duration (s)] = 5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        You are now finished with the task.
  Routine jitterISI
    TextComponent fixJitter
      text = +
      stopVal [duration (s)] = $FixISI
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine instructions
    TextComponent instrux
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Decide how likely the photo could have been:
        - taken within San Francisco OR
        - taken by a professional photographer

        The question will change every 4 images.

        EXPERIMENTER: press space bar
    KeyboardComponent instruxResp
      forceEndRoutine = True
      allowedKeys = 'space'
      startVal [time (s)] = 0.0
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  Routine postblock
    TextComponent postFixation
      text = +
      stopVal [duration (s)] = 4.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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    CodeComponent code
      Each Frame:
        if trials.thisTrialN not in [3,7,11,15,19,23,27,31]:
            continueRoutine=False
  Routine endScan
    TextComponent postscanFixation
      text = +
      stopVal [duration (s)] = 12.0
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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Flow
  LoopInitiator runs loopType="TrialHandler"
    conditionsFile = 'lists/s'+$expInfo['participant']+'/'+$expInfo['condition']+'_encoding_runlists.csv'
    loopType = sequential
    nReps = 1
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    Routine instructions
    Routine waitForScanner
    Routine beginScan
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = $x
      loopType = sequential
      nReps = 1
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      Routine preblock
      Routine trial_2
      Routine jitterISI
      Routine postblock
    LoopTerminator trials
    Routine endScan
    Routine cushionEnd
  LoopTerminator runs
  Routine finished
