PsychoPy2experiment version="1.80.06"
Settings
  Data filename = 'data/%s_%s_%s' %(expInfo['participant'], expName, expInfo['date'])
  Monitor = testMonitor
  Window size (pixels) = [2560, 1440]
  Full-screen window = True
  Experiment info = {u'participant': u'practice', u'condition': u'A'}
  Save csv file = True
  expName = recognition
  Units = norm
  Screen = 1
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Routines
  Routine itemrec
    StaticComponent ISI
      stopVal [duration (s)] = .5
      startVal [time (s)] = 0
    ImageComponent image_2
      stopVal [duration (s)] = 4.5
      units = pix
      startVal [time (s)] = 0.5
      image [set every repeat] = $ImageFile
      size = [1000, 750]
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    TextComponent scale_itemrec
      wrapWidth = 1600
      color = $[1.000,1.000,1.000]
      stopVal [duration (s)] = 4.0
      pos = [0, -.9]
      startVal [time (s)] = 0.5
      letterHeight = 0.08
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      text:
        OLD OR NEW?
        V: REMEMBER -- B: FAMILIAR -- N: NEW
    KeyboardComponent response_itemrec
      stopVal [duration (s)] = 4
      forceEndRoutine = True
      allowedKeys = 'v','b','n'
      startVal [time (s)] = 1
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    TextComponent fixISI
      text = +
      stopVal [duration (s)] = .5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine sourceconf
    ImageComponent image_3
      stopVal [duration (s)] = 2.5
      units = pix
      startVal [time (s)] = 0
      image [set every repeat] = $ImageFile
      size = [1000, 750]
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    TextComponent scale_sourceconf
      wrapWidth = 1600
      color = $[1.000,1.000,1.000]
      stopVal [duration (s)] = 2.0
      pos = [0, -.9]
      startVal [time (s)] = 0
      letterHeight = 0.08
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      text:
        CONFIDENCE?
        V: SURE -- B: UNSURE
    KeyboardComponent response_sourceconf
      stopVal [duration (s)] = 2.5
      forceEndRoutine = True
      allowedKeys = 'v','b'
      startVal [time (s)] = 0
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  Routine sourcerec
    ImageComponent image
      stopVal [duration (s)] = 4.5
      units = pix
      startVal [time (s)] = 0
      image [set every repeat] = $ImageFile
      size = [1000, 750]
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    TextComponent scale_sourcerec
      wrapWidth = 1600
      color = $[1.000,1.000,1.000]
      stopVal [duration (s)] = 4.0
      pos = [0, -.9]
      startVal [time (s)] = 0
      letterHeight = 0.08
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      text:
        WHICH QUESTION?
        V: in SF -- B: prof. photog.
    KeyboardComponent response_sourcerec
      stopVal [duration (s)] = 4.5
      forceEndRoutine = True
      allowedKeys = 'v','b','n','m'
      startVal [time (s)] = 0
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  Routine finished
    TextComponent text
      stopVal [duration (s)] = 5
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        You are now finished with the experiment.
  Routine fixationISI
    TextComponent fixation_2
      text = +
      stopVal [duration (s)] = .25
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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  Routine takebreak
    TextComponent takeBreak
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Take a break.

        Press any key to continue.
    KeyboardComponent breakResp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent endRoutine
      Each Frame:
        if trials.thisTrialN not in [66,132,198]:
            continueRoutine=False
  Routine instructions
    TextComponent instrux
      startVal [time (s)] = 0.0
      letterHeight = 0.1
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      text:
        Determine whether the item is remembered, familiar, or new.
        Then select which question you answered about the image yesterday,
        and rate your confidence.

        Press any key to continue.
    KeyboardComponent instruxResp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
      store = nothing
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Flow
  Routine instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = 'lists/s'+$expInfo['participant']+'/'+$expInfo['condition']+'_recognition.csv'
    loopType = sequential
    nReps = 1
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    Routine takebreak
    Routine itemrec
    Routine sourcerec
    Routine sourceconf
    Routine fixationISI
  LoopTerminator trials
  Routine finished
